CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FileID>.*)_(?P<Channel>.*).tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'DAPI': 'FileID', 'GFP': 'FileID', 'eRNA': 'FileID', 'RFP': 'FileID'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_eRNA")
    Name to assign these images:eRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:Grayscale
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Threshold:[module_num:8|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enabled:False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
    Select the input image:GFP
    Name the output image:GFP_Isolated
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.4
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:9|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enabled:False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
    Select the input image:GFP_Isolated
    Name the primary objects to be identified:GFP_Found
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:1
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:GFP
    Name the primary objects to be identified:GFP_Isolated_Found
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.6
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:GFP_Isolated_Found
    Name the output image:GFP_Image
    Select the color format:Grayscale
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:GFP_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:RFP
    Name the primary objects to be identified:RFP_Isolated_Found
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.8
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:RFP_Isolated_Found
    Name the output image:RFP_Image
    Select the color format:Grayscale
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:RFP_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_RFP
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:eRNA
    Name the primary objects to be identified:eRNA
    Typical diameter of objects, in pixel units (Min,Max):2,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:eRNA
    Name the output image:eRNA_Image
    Select the color format:Grayscale
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:eRNA_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:eRNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_eRNA
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifySecondaryObjects:[module_num:19|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CY3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:0.975
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:20|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enabled:False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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:21|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enabled:False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
    Select the objects to filter:Cells
    Name the output objects:Cells_filt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select additional object to relabel:Nuclei
    Name the relabeled objects:Nuclei_filt

ConvertObjectsToImage:[module_num:22|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enabled:False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
    Select the input objects:Cells_filt
    Name the output image:CellMask
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:23|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enabled:False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
    Select the input objects:Nuclei_filt
    Name the output image:NucMask
    Select the color format:Grayscale
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
SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:CY3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MASK_cell
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MASK_nuc
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
